PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  expName = words_sep
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Julianaa é linda
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    PolygonComponent polygon
      fillColor = 0.0824, -0.6627, 0.7725
      shape = rectangle
      size = text.boundingBox[0],text.boundingBox[1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_origin
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Julianaa é linda
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #spliting words inside of the textbox

        palavras = text.text.split(" ");
        tamanhos_das_palavras = []

        for palavra in palavras:
            text = visual.TextStim(win=win, name='text',
                text=palavra,
                font='Open Sans',
                pos=(0, 0), height=30.0, wrapWidth=None, ori=0.0,
                color=[-1.0000, -1.0000, -1.0000], colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);
            tamanhos_das_palavras.append(text.boundingBox)
  Routine tamanhos
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #catching words size (w,h).
        tamanho = " "
        for palavra in tamanhos_das_palavras:
            tamanho += "("+str(palavra[0])+","+str(palavra[1])+")\n"
    TextComponent text_3
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $tamanho
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Flow
  Routine trial
  Routine tamanhos
